<?xml version='1.0' encoding='UTF-8'?>
<MorpheusModel version="4">
    <Description>
        <Details></Details>
        <Title>Virus transmission</Title>
    </Description>
    <Space>
        <Lattice class="square">
            <Neighborhood>
                <Order>1</Order>
            </Neighborhood>
            <Size symbol="size" value="10, 10,   0.0"/>
        </Lattice>
        <SpaceSymbol symbol="space"/>
    </Space>
    <Time>
        <StartTime value="0"/>
        <StopTime value="50"/>
        <TimeSymbol symbol="time"/>
    </Time>
    <Analysis>
        <ModelGraph format="dot" include-tags="#untagged" reduced="false"/>
        <Gnuplotter decorate="true" time-step="1.0">
            <Plot>
                <Cells value="cell.type">
                    <ColorMap>
                        <Color color="grey80" value="0"/>
                        <Color color="green" value="1"/>
                    </ColorMap>
                </Cells>
                <CellLabels value="V"/>
            </Plot>
            <Terminal name="png"/>
        </Gnuplotter>
        <Gnuplotter time-step="1.0">
            <Plot>
                <Field symbol-ref="Ve">
                    <ColorMap>
                        <Color color="light-blue" value="0"/>
                        <Color color="light-green" value="0.5"/>
                    </ColorMap>
                </Field>
            </Plot>
            <Terminal name="png"/>
        </Gnuplotter>
        <!--    <Disabled>
        <Gnuplotter time-step="1.0">
            <Plot>
                <Cells value="V_c2c">
                    <ColorMap>
                        <Color color="light-blue" value="0"/>
                        <Color color="light-green" value="1"/>
                    </ColorMap>
                </Cells>
            </Plot>
            <Terminal name="png"/>
        </Gnuplotter>
    </Disabled>
-->
        <Logger time-step="1.0">
            <Input>
                <Symbol symbol-ref="V"/>
            </Input>
            <Output>
                <TextOutput/>
            </Output>
        </Logger>
        <Logger name="populations" time-step="1.0">
            <Input>
                <Symbol symbol-ref="celltype.target.size"/>
                <Symbol symbol-ref="celltype.infected.size"/>
            </Input>
            <Output>
                <TextOutput/>
            </Output>
        </Logger>
        <Logger time-step="1.0">
            <Input>
                <Symbol symbol-ref="cell.id"/>
                <Symbol symbol-ref="cell.type"/>
                <Symbol symbol-ref="cell.center.x"/>
                <Symbol symbol-ref="cell.center.y"/>
                <Symbol symbol-ref="Vi"/>
                <!--    <Disabled>
        <Symbol symbol-ref="V_c2c"/>
    </Disabled>
-->
            </Input>
            <Output>
                <TextOutput/>
            </Output>
        </Logger>
        <ContactLogger time-step="1.0" ignore-medium="true"/>
        <Logger time-step="1.0">
            <Input>
                <Symbol symbol-ref="space.x"/>
                <Symbol symbol-ref="space.y"/>
                <Symbol symbol-ref="cell.id"/>
            </Input>
            <Output>
                <TextOutput/>
            </Output>
        </Logger>
        <Logger time-step="1000">
            <Input>
                <!--    <Disabled>
        <Symbol symbol-ref="b_c2c"/>
    </Disabled>
-->
                <Symbol symbol-ref="b_cf"/>
                <Symbol symbol-ref="c_V"/>
                <Symbol symbol-ref="D_V"/>
                <!--    <Disabled>
        <Symbol symbol-ref="l_c2c"/>
    </Disabled>
-->
                <Symbol symbol-ref="p_V"/>
            </Input>
            <Output>
                <TextOutput/>
            </Output>
        </Logger>
        <Logger time-step="1.0">
            <Input>
                <Symbol symbol-ref="Ve"/>
            </Input>
            <Output>
                <TextOutput/>
            </Output>
        </Logger>
    </Analysis>
    <Global>
        <Constant name="cell-free transmission rate" symbol="b_cf" value="0"/>
        <!--    <Disabled>
        <Constant name="cell2cell transmission rate" symbol="b_c2c" value="0.0"/>
    </Disabled>
-->
        <Constant symbol="D_V" value="0.0"/>
        <!--    <Disabled>
        <Constant symbol="l_c2c" value="0.0"/>
    </Disabled>
-->
        <Field name="extracellular virus" symbol="Ve" value="0.0">
            <Diffusion well-mixed="true" rate="0"/>
        </Field>
        <System name="extracellular viral load" time-scaling="1.0" solver="Runge-Kutta [fixed, O(4)]" time-step="1.0">
            <DiffEqn symbol-ref="Ve">
                <Expression>(p_V*V-c_V*Ve)*run_model</Expression>
            </DiffEqn>
        </System>
        <Constant name="virus production" symbol="V" value="0.0"/>
        <Event>
            <Condition>time >= 10</Condition>
            <Rule symbol-ref="run_model">
                <Expression>1</Expression>
            </Rule>
        </Event>
        <Variable symbol="run_model" value="0"/>
        <Constant name="clearance rate of extracellular virus" symbol="c_V" value="0.0"/>
        <Constant name="virus export rate" symbol="p_V" value="0"/>
    </Global>
    <CellTypes>
        <CellType name="target" class="biological">
            <Property name="viral load" symbol="V" value="0.0"/>
            <VolumeConstraint name="target volume" strength="1" target="2"/>
            <ConnectivityConstraint/>
            <SurfaceConstraint strength="3" mode="aspherity" target="1"/>
            <ChangeCellType name="cell becomes infected" newCellType="infected">
                <Condition>rand_uni(0,1) &lt;= p_cf and run_model==1</Condition>
                <Triggers>
                    <Rule symbol-ref="V">
                        <Expression>1</Expression>
                    </Rule>
                </Triggers>
            </ChangeCellType>
            <Function name="probability to be infected at certain time point" symbol="p_cf">
                <Expression>1-exp(-b_cf*Vi)</Expression>
            </Function>
            <Property name="viral load per cell" symbol="Vi" value="0.0"/>
            <Mapper name="extracellular to cellular viral load">
                <Input value="Ve"/>
                <Output mapping="sum" symbol-ref="Vi"/>
            </Mapper>
            <FreezeMotion>
                <Condition>run_model == 1</Condition>
            </FreezeMotion>
            <!--    <Disabled>
        <Function name="probability to be infected at certain time point" symbol="p_c2c">
            <Expression>1-exp(-b_c2c*V_c2c)</Expression>
        </Function>
    </Disabled>
-->
            <!--    <Disabled>
        <ChangeCellType name="cell becomes infected" newCellType="infected">
            <Condition>rand_uni(0,1) &lt;= p_c2c and run_model==1</Condition>
            <Triggers>
                <Rule symbol-ref="V">
                    <Expression>1</Expression>
                </Rule>
            </Triggers>
        </ChangeCellType>
    </Disabled>
-->
            <!--    <Disabled>
        <NeighborhoodReporter name="viral load of neighboring cells">
            <Input noflux-cell-medium="true" scaling="length" value="l_c2c*V"/>
            <Output mapping="sum" symbol-ref="V_c2c"/>
        </NeighborhoodReporter>
    </Disabled>
-->
            <!--    <Disabled>
        <Property symbol="V_c2c" value="0.0"/>
    </Disabled>
-->
        </CellType>
        <CellType name="infected" class="biological">
            <Property name="viral load" symbol="V" value="1"/>
            <VolumeConstraint name="target volume" strength="1" target="2"/>
            <ConnectivityConstraint/>
            <SurfaceConstraint strength="3" mode="aspherity" target="1"/>
            <FreezeMotion>
                <Condition>run_model == 1</Condition>
            </FreezeMotion>
            <!--    <Disabled>
        <NeighborhoodReporter name="viral load of neighboring cells">
            <Input noflux-cell-medium="true" scaling="length" value="l_c2c*V"/>
            <Output mapping="sum" symbol-ref="V_c2c"/>
        </NeighborhoodReporter>
    </Disabled>
-->
            <!--    <Disabled>
        <Property symbol="V_c2c" value="0.0"/>
    </Disabled>
-->
            <Mapper name="extracellular to cellular viral load">
                <Input value="Ve"/>
                <Output mapping="sum" symbol-ref="Vi"/>
            </Mapper>
            <Property name="viral load per cell" symbol="Vi" value="0.0"/>
        </CellType>
    </CellTypes>
    <CPM>
        <Interaction/>
        <ShapeSurface scaling="norm">
            <Neighborhood>
                <Order>6</Order>
            </Neighborhood>
        </ShapeSurface>
        <MonteCarloSampler stepper="edgelist">
            <MCSDuration value="1"/>
            <MetropolisKinetics temperature="1"/>
            <Neighborhood>
                <Order>2</Order>
            </Neighborhood>
        </MonteCarloSampler>
    </CPM>
    <CellPopulations>
        <Population type="target" name="target strat population" size="49">
            <InitDistribute mode="random" number-of-cells="49" probability="0.1"/>
        </Population>
        <Population type="infected" name="infected " size="1">
            <InitDistribute mode="random" number-of-cells="1" probability="0.1"/>
        </Population>
    </CellPopulations>
</MorpheusModel>
